PsychoPy2experiment version="1.90.2"
Settings
  expName = detection
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Window size (pixels) = (1024, 768)
  Screen = 1
  Monitor = testMonitor
  Units = use prefs
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        from glob import glob
        TONE_FILES = glob('audio/*Hz_20s.wav')

        def flash_stimuli(win, stimuli, duration, frequency=1):
            """
            Flash stimuli.

            Parameters
            ----------
            win : (psychopy.visual.Window) window in which to draw stimuli
            stimuli : (iterable) some iterable of objects with `.draw()` method
            duration : (numeric) duration of flashing in seconds
            frequency : (numeric) frequency of flashing in Hertz
            """
            start = time.time()
            duration_one_display = 1 / frequency
            n_stim = len(stimuli)
            counter = 0

            while time.time() - start < duration:
                _this_start = time.time()
                while time.time() - _this_start < duration_one_display:
                    this_stim = stimuli[counter % n_stim]
                    this_stim.draw()
                    win.flip()
                    if time.time() - start >= duration:
                        return
                    close_on_esc(win)
                counter += 1


        def draw(win, stim, duration):
            """
            Draw stimulus for a given duration.

            Parameters
            ----------
            win : (psychopy.visual.Window)
            stim : object with `.draw()` method
            duration : (numeric) duration in seconds to display the stimulus
            """
            # Use a busy loop instead of sleeping so we can exit early if need be.
            start_time = time.time()
            while time.time() - start_time < duration:
                stim.draw()
                close_on_esc(win)
                win.flip()


        class Checkerboard(object):
            """
            Create an instance of a `Checkerboard` object.

            Parameters
            ----------
            win : (psychopy.visual.Window) window in which to display stimulus
            side_len : (int) number of rings in radial checkerboard
            inverted : (bool) if true, invert black and white squares
            size : (numeric) size of checkerboard
            kwds : keyword arguments to psychopy.visual.ImageStim
            """

            def __init__(self, win, side_len=8, inverted=False, size=16, **kwds):
                self.win = win
                self.side_len = side_len
                self.inverted = inverted
                self.size = size

                self._array = self._get_array()
                self._stim = psychopy.visual.RadialStim(
                    win=self.win, tex=self._array, size=self.size, radialCycles=1,
                    **kwds
                )

            def _get_array(self):
                """Return square `np.ndarray` of alternating ones and negative ones
                with shape `(self.side_len, self.side_len)`."""
                board = np.ones((self.side_len, self.side_len), dtype=np.int32)
                board[::2, ::2] = -1
                board[1::2, 1::2] = -1
                return board if not self.inverted else board * -1

            def draw(self):
                """Draw checkerboard object."""
                self._stim.draw()

        stim_list = [1, 2, 3] * 5
        np.random.shuffle(stim_list)

        np.random.shuffle(TONE_FILES)
        tones = [psychopy.sound.Sound(tf) for tf in TONE_FILES]

        # Checkerboards (with finger tapping)
        checkerboards = (Checkerboard(win), Checkerboard(win, inverted=True))

        # Finger tapping instructions
        tapping = psychopy.visual.TextStim(win, _TAPPING_INSTRUCTIONS, height=2,
                                               wrapWidth=30)
        # Rest between tasks
        crosshair = psychopy.visual.TextStim(win, '+', height=2)
        # Waiting for scanner
        waiting = psychopy.visual.TextStim(win, "Waiting for scanner ...")

        block_duration = 16
        rest_duration = 16
        i = 0
      Begin Routine:
        if stim_list[trials.thisN] == 1:
            flash_stimuli(win, checkerboards, duration=block_duration,
                                  frequency=5)
        elif stim_list[trials.thisN] == 2:
            # Tone
            tones[i].play()
            psychopy.core.wait(block_duration)
            tones[i].stop()
            i += 1
        elif stim_list[trials.thisN] == 3:
            draw(win=win, stim=tapping, duration=block_duration)
        # Rest
        draw(win=win, stim=crosshair, duration=rest_duration)
    KeyboardComponent key_resp_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $block_duration
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
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  Routine instructions
    CodeComponent begin_exp
      Begin Experiment:
        import psychopy
        import numpy as np
        import time
        instruc_txt = """Watch the screen. A flashing checkerboard will be shown \
        and music will be played at various times. Please pay attention to both \
        stimuli. Whenever there is a checkerboard on the screen or music is playing, \
        tap your fingers of both hands as fast as you can."""

        _TAPPING_INSTRUCTIONS = 'Tap your fingers as quickly as possible!'


        def close_on_esc(win):
            if 'escape' in psychopy.event.getKeys():
                win.close()
                psychopy.core.quit()
      End Routine:
        draw(win=win, stim=crosshair, duration=5)
    TextComponent instruc_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        $instruc_txt
    KeyboardComponent scanner_resp
      startVal [time (s)] = 0.0
      allowedKeys = '5'
      forceEndRoutine = True
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    nReps = 15
    loopType = sequential
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    Routine trial
  LoopTerminator trials
